CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:10
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['We keep the Images module empty for using CLI. It it useful to add the images in this module when testing in GUI.']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['Extract metadata from three methods:', '', "1. Directly from the 'nd2' file metadata.", '2. Using platemap file, connect "Image" column from platemap to "Series" from nd2 file metadata to connect relevant metadata for saving max projected images.', '3. Use regular expression to extract plate name metadata from folder name for saving max projected images.']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:3
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes
    Metadata extraction method:Import from file
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    Extract metadata from:All images
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    Metadata file location:Default Input Folder sub-folder|nuclear_speckle_image_analysis/0.wave1_data/0.download_data/metadata/cellprofiler_csvs
    Match file and image metadata:[{'CSV Metadata': 'Image', 'Image Metadata': 'Series'}]
    Use case insensitive matching?:No
    Metadata file name:slide1.positions.csv
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:(?P<Plate>slide[1-4]{1})$
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['Assign names to each channel using ChannelName metadata for creating max_projected images per FOV per well.']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does ChannelName "DAPI")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelName "A647")
    Name to assign these images:A647
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelName "GOLD")
    Name to assign these images:GOLD
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['Use Groups so that the correct images are max-projected together. We will use Series as the category for grouping as it represents the unique FOV per well. We can confirm this works as the count for each series is 9 image sets, relating to 9 z-slices.']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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Series

MakeProjection:[module_num:5|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notes:['Generate max-projection for DAPI channel.']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
    Select the input image:DAPI
    Type of projection:Maximum
    Name the output image:MaxDAPI
    Frequency:6.0

SaveImages:[module_num:6|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notes:['Save max projected DAPI channel images (CH0) using the metadata to create a single name (include Z09 showing that this image is the combination of the 9 z-slices). Saved as 16-bit as it is the same bit-depth as original images (as identified when loading in example image in Fiji).']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
    Select the type of image to save:Image
    Select the image to save:MaxDAPI
    Select method for constructing file names:Single name
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    Enter single file name:\g<Plate>_\g<Well>_M\g<Point Name>_CH0_Z09
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    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|nuclear_speckle_image_analysis/0.wave1_data/1.max_projection/max_projected_images/slide1
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

MakeProjection:[module_num:7|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notes:['Generate max projection for A647 channel.']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
    Select the input image:A647
    Type of projection:Maximum
    Name the output image:MaxA647
    Frequency:6.0

SaveImages:[module_num:8|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notes:['Save max projected A647 channel images (CH1) using the metadata to create a single name (include Z09 showing that this image is the combination of the 9 z-slices). Saved as 16-bit as it is the same bit-depth as original images (as identified when loading in example image in Fiji).']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
    Select the type of image to save:Image
    Select the image to save:MaxA647
    Select method for constructing file names:Single name
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    Enter single file name:\g<Plate>_\g<Well>_M\g<Point Name>_CH1_Z09
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    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|nuclear_speckle_image_analysis/0.wave1_data/1.max_projection/max_projected_images/slide1
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

MakeProjection:[module_num:9|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notes:['Generate max projection for GOLD channel.']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
    Select the input image:GOLD
    Type of projection:Maximum
    Name the output image:MaxGOLD
    Frequency:6.0

SaveImages:[module_num:10|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notes:['Save max projected GOLD channel images (CH2) using the metadata to create a single name (include Z09 showing that this image is the combination of the 9 z-slices). Saved as 16-bit as it is the same bit-depth as original images (as identified when loading in example image in Fiji).']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
    Select the type of image to save:Image
    Select the image to save:MaxGOLD
    Select method for constructing file names:Single name
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    Enter single file name:\g<Plate>_\g<Well>_M\g<Point Name>_CH2_Z09
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    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|nuclear_speckle_image_analysis/0.wave1_data/1.max_projection/max_projected_images/slide1
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
