CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:16
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['We will be processing the data using the CLI with CP Parallel, so this module will be empty and only used with the GUI for testing.']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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<Plate>slide[1-4]{1})_(?P<Well>[A-Z]{1}[0-9]{1,2})_(?P<Site>M[0-9]{1,2})_(?P<Channel>CH[0-2]{1})
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['Assign names to each channel:', '', 'CH0 = DAPI', 'CH1 = A647', 'CH2 = GOLD']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "CH0")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "CH1")
    Name to assign these images:A647
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "CH2")
    Name to assign these images:GOLD
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['We do not need to use groups for this pipeline.']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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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notes:['Identify nuclei using DAPI channel. These are the most optimal parameters at this time.']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
    Select the input image:DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):30,65
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.005,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
MeasureColocalization:[module_num:6|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notes:['Measure the correlation using both nuclei and whole images across all channels. Using default parameters.']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
    Select images to measure:A647, DAPI, GOLD
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Both
    Select objects to measure:Nuclei
    Run all metrics?:Yes
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    Method for Costes thresholding:Faster

MeasureGranularity:[module_num:7|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notes:['Measure granularity across whole images and within nuclei. Using default parameters.']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
    Select images to measure:A647, DAPI, GOLD
    Measure within objects?:Yes
    Select objects to measure:Nuclei
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16

MeasureImageIntensity:[module_num:8|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notes:['Measure whole image intensity across all channels.']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
    Select images to measure:A647, DAPI, GOLD
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:No
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
MeasureObjectIntensity:[module_num:9|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notes:['Measure intensity within nuclei across all channels.']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
    Select images to measure:A647, DAPI, GOLD
    Select objects to measure:Nuclei

MeasureObjectIntensityDistribution:[module_num:10|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notes:['Calculate both magnitudes and phase zernikes to get as much information as possible. Measuring within the nuclei object. Using default parameters.']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
    Select images to measure:A647, DAPI, GOLD
    Hidden:1
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:Magnitudes and phase
    Maximum zernike moment:9
    Select objects to measure:Nuclei
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureObjectNeighbors:[module_num:11|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notes:['Measure number of adjacent neighbors for nuclei. Include discarded nuclei on edge when calculating number.']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
    Select objects to measure:Nuclei
    Select neighboring objects to measure:Nuclei
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectSizeShape:[module_num:12|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notes:['Measure area and shape for nuclei object. Calculate zernike features but not advanced at this time.']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
    Select object sets to measure:Nuclei
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureTexture:[module_num:13|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notes:['Measure texture in both nuclei and whole images across all channels. Using default parameters.']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
    Select images to measure:A647, DAPI, GOLD
    Select objects to measure:Nuclei
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Both
    Texture scale to measure:3

ConvertObjectsToImage:[module_num:14|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notes:['Convert objects to a binary image to save for downstream analysis.']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
    Select the input objects:Nuclei
    Name the output image:MaskNuclei
    Select the color format:Binary (black & white)
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
SaveImages:[module_num:15|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notes:['Save binary nuclei masks using the DAPI file names with a _MaskNuclei suffix.']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
    Select the type of image to save:Image
    Select the image to save:MaskNuclei
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_MaskNuclei
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToDatabase:[module_num:16|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notes:['Export data to a SQLite file. We will not output any mean or median values of per image measurements.']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
    Database type:SQLite
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    Add a prefix to table names?:No
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    Output file location:Default Output Folder|
    Create a CellProfiler Analyst properties file?:No
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    Name the SQLite database file:nuc_speckle_analysis.sqlite
    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:One table per object type
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    Write image thumbnails directly to the database?:No
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    Experiment name:Nuclear_speckle_data
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    Export object relationships?:Yes
    Overwrite without warning?:Never
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    Create a CellProfiler Analyst workspace file?:No
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